# ----------------------------------------
# Pseudo-plateau bursting. A modification of the Chay-Keizer model.
# Modified from the original code of Teka, Bertram, etc.
# 
# For Chapter 9, Section 9.4 of
# Keener and Sneyd, Mathematical Physiology, Third edition, Springer.
#
# Written by James Keener and James Sneyd
# ----------------------------------------


# Variables:
#    V -- membrane potential
#    n -- delayed rectifier activation variable
#    c -- cytosolic calcium concentration

# Initial conditions
v(0)=-65 
n(0)=0 
c(0)=0.1 

# steady state functions 
ninf = 1/(1+exp((vn-v)/sn))
minf = 1/(1+exp((vm-v)/sm))

# parameter values
par gkatp=180
num vk=-75, vca=25, cm=5300
par gk=2700, gca=1000
par vm=-20, sm=12, vn=-12, sn=5
num taun=18.7
par gkca=400
num kd=0.3

# Ikca
Ikca = gkca/(1+(kd/c)^3)*(v-vk)

# Calcium Handling
par kpmca=0.18, f=0.01
num alpha=4.50e-6

# ICa
Ica = gca*minf*(v-vca)

# Ik
Ik = gk*n*(v-vk)

# Ikatp
Ikatp = gkatp*(v-vk)

# Ca fluxes
Jmem = -(alpha*Ica + kpmca*c)

# equations
dv/dt=-(Ik + Ica + Ikca + Ikatp)/cm
dn/dt=(ninf-n)/taun
dc/dt = f*Jmem

aux tsec=t/1000
aux Condkca=gkca/(1+(kd/c)^3)

@ meth=cvode, atol=1.0e-6, tol=1.0e-6, dt=10, total=150000, maxstor=100000
@ xp=tsec, yp=v, bound=100000000
@ xlo=0, xhi=5, ylo=-70, yhi=-10

done
